[
    {
        "acquisitionWizard": null,
        "amplitudeContrast": 0.07,
        "copyFiles": false,
        "darkFile": null,
        "dataStreaming": true,
        "deleteFrames": false,
        "doseInitial": 0.0,
        "dosePerFrame": 1.0,
        "fileTimeout": 30,
        "filesPath": null,
        "filesPattern": null,
        "gainFile": null,
        "haveDataBeenPhaseFlipped": false,
        "importFrom": 0,
        "inputIndividualFrames": false,
        "magnification": null,
        "movieSuffix": "_frames.mrcs",
        "numberOfIndividualFrames": null,
        "object.className": "ProtImportMovies",
        "object.comment": "",
        "object.id": "2",
        "object.label": "scipion - import movies",
        "runMode": 0,
        "runName": null,
        "samplingRate": null,
        "samplingRateMode": 0,
        "scannedPixelSize": null,
        "socketPort": 5000,
        "sphericalAberration": 2.7,
        "stackFrames": false,
        "streamingSocket": false,
        "timeout": 43200,
        "voltage": 300.0,
        "writeMoviesInProject": false
    },
    {
        "GPUIDs": "0",
        "alignFrame0": 1,
        "alignFrameN": 0,
        "angDist": 0.0,
        "binFactor": 1.0,
        "computeAllFramesAvg": false,
        "cropDimX": 0,
        "cropDimY": 0,
        "cropOffsetX": 0,
        "cropOffsetY": 0,
        "defectFile": null,
        "doApplyDoseFilter": false,
        "doComputeMicThumbnail": false,
        "doComputePSD": false,
        "doMagCor": false,
        "doSaveAveMic": true,
        "doSaveMovie": false,
        "doSaveUnweightedMic": true,
        "extraParams": "",
        "extraParams2": "-RotGain 3",
        "gpuMsg": "True",
        "group": 1,
        "hostName": "localhost",
        "inputMovies": "2.outputMovies",
        "numberOfMpi": 1,
        "numberOfThreads": 1,
        "object.className": "ProtMotionCorr",
        "object.comment": "",
        "object.id": "58",
        "object.label": "motioncorr - motioncorr alignment",
        "patchOverlap": 0,
        "patchX": 0,
        "patchY": 0,
        "runMode": 0,
        "runName": null,
        "scaleMaj": 1.0,
        "scaleMin": 1.0,
        "sumFrame0": 1,
        "sumFrameN": 0,
        "tol": 0.5,
        "useAlignToSum": true,
        "useEst": true,
        "useMotioncor2": true
    },
    {
        "astigmatism": 100.0,
        "ctfDownFactor": 1.0,
        "findPhaseShift": false,
        "highRes": null,
        "hostName": "localhost",
        "inputMicrographs": "58.outputMicrographs",
        "lowRes": null,
        "maxDefocus": null,
        "maxPhaseShift": 3.15,
        "minDefocus": null,
        "minPhaseShift": 0.0,
        "numberOfMpi": 1,
        "numberOfThreads": 6,
        "object.className": "ProtCTFFind",
        "object.comment": "",
        "object.id": "121",
        "object.label": "grigoriefflab - ctffind",
        "recalculate": false,
        "resamplePix": true,
        "runMode": 0,
        "runName": null,
        "sqliteFile": null,
        "stepPhaseShift": 0.2,
        "useCtffind4": true,
        "windowSize": 512
    },
    {
        "astigmatism": 1000.0,
        "cpuAlert": 101.0,
        "doDiskIO": true,
        "doGpu": true,
        "doMail": false,
        "doNetwork": true,
        "emailFrom": "from@from.fakeadress.com",
        "emailTo": "to@to.fakeadress.com",
        "gpusToUse": "0",
        "inputProtocols": [
            "2",
            "58",
            "121"
        ],
        "maxDefocus": 40000.0,
        "memAlert": 101.0,
        "minDefocus": 1000.0,
        "monitorTime": 30000.0,
        "netInterfaces": 1,
        "object.className": "ProtMonitorSummary",
        "object.comment": "",
        "object.id": "167",
        "object.label": "scipion - monitor summary",
        "publishCmd": "rsync -avL %(REPORT_FOLDER)s /var/www/scipion/",
        "ratio1Value": 1.15,
        "ratio2Value": 4.5,
        "runMode": 0,
        "runName": null,
        "samplingInterval": 60,
        "smtp": "smtp.fakeadress.com",
        "stddevValue": 0.04,
        "swapAlert": 101.0
    }
]